# TOPAS-nBio example
# 
# White blood cell: Eosinophil
# 
# Cell has a bi-lobed nucleus and has the option of containing granules.

#If users specify the number of granules in the cell, then this check has to be set to false:
#Overlap checking is still done.
b:Ge/QuitIfOverlapDetected="false"

d:Ge/World/HLX=20. um
d:Ge/World/HLY=20. um
d:Ge/World/HLZ=20. um
b:Ge/World/invisible = "true"

s:Ge/MyCell/Type="TsEosinophil"
s:Ge/MyCell/Material="G4_WATER"
s:Ge/MyCell/Parent="World"
d:Ge/MyCell/EosinophilRadius=8.0 um
s:Ge/MyCell/Color="white"
#s:Ge/MyCell/DrawingStyle = "Solid"

s:Ge/MyCell/Nucleus/Material="G4_WATER"
s:Ge/MyCell/Nucleus/Color="purple"
s:Ge/MyCell/Nucleus/DrawingStyle = "Solid"

s:Ge/MyCell/Granule/Material="G4_WATER"
s:Ge/MyCell/Granule/Color="blue"
s:Ge/MyCell/Granule/DrawingStyle = "Solid"
i:Ge/MyCell/Granule/NumberOfGranules = 100

#Option to set the Granule radius if not set and granules are included, the default radius is 0.25 um
d:Ge/MyCell/Granule/GranuleRadius=0.1 um

Ph/Default/Modules = 1 "g4em-standard_opt0"

# Set a source
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 5 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "None"
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 200

#Score in the Cell
s:Sc/CellScorer/Quantity = "DoseToMedium"
s:Sc/CellScorer/Component = "MyCell"
b:Sc/CellScorer/OutputToConsole = "TRUE"
b:Sc/CellScorer/PropagateToChildren = "true"
s:Sc/CellScorer/IfOutputFileAlreadyExists = "overwrite"

#Score energy deposited in Cell components
s:Sc/OrganelleScorer/Quantity = "TsNtupleForCell"
s:Sc/OrganelleScorer/Component = "MyCell"
s:Sc/OrganelleScorer/IfOutputFileAlreadyExists = "Overwrite"  
s:Sc/OrganelleScorer/OutputType = "ASCII" 
s:Sc/OrganelleScorer/OutputFile = "EdepToOrganelles"
b:Sc/OrganelleScorer/PropagateToChildren = "true"

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1024
i:Gr/ViewA/WindowSizeY = 768


Ts/PauseBeforeQuit = "True"
