# TOPAS-nBio example: osteoblast (bone cell)
# To include a nucleus at the center of the cell, specify the nucleus radius. 
# To include mitochondria, randomly positioned in the cytoplasm, specify the number of mitochondria to be included.
# 
# Example uses EM Livermore physics models in water.

# Since mitochondria are arranged randomly, this check should be switched off to allow the randomize algorithm to work.
b:Ge/QuitIfOverlapDetected="false"

d:Ge/World/HLX=50. um
d:Ge/World/HLY=50. um
d:Ge/World/HLZ=50. um
s:Ge/World/Material="G4_WATER"
b:Ge/World/Invisible="true"

#average size is 20-30 um
s:Ge/MyCell/Type="TsOsteoblast"
s:Ge/MyCell/Material="G4_WATER"
s:Ge/MyCell/Parent="World"
d:Ge/MyCell/Cell_HLX=10 um
d:Ge/MyCell/Cell_HLY=10 um
d:Ge/MyCell/Cell_HLZ=10 um
s:Ge/MyCell/Color="white"

#Nucleus
d:Ge/MyCell/Nucleus/NucleusRadius=5. um
s:Ge/MyCell/Nucleus/Material="G4_WATER"
s:Ge/MyCell/Nucleus/Color="purple"
s:Ge/MyCell/Nucleus/DrawingStyle="solid"

#Mitochondria
i:Ge/MyCell/Mitochondria/NumberOfMitochondria=100
d:Ge/MyCell/Mitochondria/a=0.5 um
d:Ge/MyCell/Mitochondria/b=0.3 um
d:Ge/MyCell/Mitochondria/c=0.9 um
s:Ge/MyCell/Mitochondria/Material="G4_WATER"
s:Ge/MyCell/Mitochondria/Color="grass"
s:Ge/MyCell/Mitochondria/DrawingStyle="solid"

Ph/Default/Modules = 1 "g4em-livermore"

s:So/Disk/Type = "Beam" 
s:So/Disk/Component =  "BeamPosition" 
s:So/Disk/BeamParticle = "proton" #gamma
d:So/Disk/BeamEnergy = 2 MeV 
u:So/Disk/BeamEnergySpread = 0
s:So/Disk/BeamShape = "Rectangle"
s:So/Disk/BeamPositionDistribution = "Flat"
s:So/Disk/BeamAngularDistribution = "Gaussian"
d:So/Disk/BeamAngularCutoffX = 10 deg
d:So/Disk/BeamAngularCutoffY = 10 deg
s:So/Disk/BeamPositionCutoffShape = "Rectangle"
d:So/Disk/BeamPositionCutoffX = 1 um
d:So/Disk/BeamPositionCutoffY = 1 um
d:So/Disk/BeamAngularSpreadX = 0.01 deg
d:So/Disk/BeamAngularSpreadY = 0.01 deg
i:So/Disk/NumberOfHistoriesInRun=100

#Score in the Cell
s:Sc/CellScorer/Quantity = "DoseToMedium"
s:Sc/CellScorer/Component = "MyCell"
b:Sc/CellScorer/OutputToConsole = "True"
b:Sc/CellScorer/PropagateToChildren = "true"
s:Sc/CellScorer/IfOutputFileAlreadyExists = "overwrite"

#Score energy deposited in Cell components
s:Sc/OrganelleScorer/Quantity = "TsNtupleForCell"
s:Sc/OrganelleScorer/Component = "MyCell"
s:Sc/OrganelleScorer/IfOutputFileAlreadyExists = "Overwrite"  
s:Sc/OrganelleScorer/OutputType = "ASCII" 
s:Sc/OrganelleScorer/OutputFile = "EdepToOrganelles"
b:Sc/OrganelleScorer/PropagateToChildren = "true"


s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1024
i:Gr/ViewA/WindowSizeY = 768


Ts/PauseBeforeQuit = "True"
