# TOPAS-nBio example.
# An osteocyte geometry
# Specifying parameters for a nucleus and/or mitochondria, include the organelles.
#
# Since mitochondria are arranged randomly, this check should be switched off, overlap checking is still done 
# and when an overlap is detected the overlapping components are rearranged. 
b:Ge/QuitIfOverlapDetected="false"

d:Ge/World/HLX=50. um
d:Ge/World/HLY=50. um
d:Ge/World/HLZ=50. um
b:Ge/World/Invisible="true"

s:Ge/MyCell/Type="TsOsteocyte"
s:Ge/MyCell/Color="white"
s:Ge/MyCell/Parent="World"
s:Ge/MyCell/Material="G4_WATER"

#Nucleus
d:Ge/MyCell/Nucleus/NucleusRadius=5. um
s:Ge/MyCell/Nucleus/Material="G4_WATER"
s:Ge/MyCell/Nucleus/Color="red"
s:Ge/MyCell/Nucleus/DrawingStyle="solid"

#Mitochondria
i:Ge/MyCell/Mitochondria/NumberOfMitochondria=10
d:Ge/MyCell/Mitochondria/a=0.5 um
d:Ge/MyCell/Mitochondria/b=0.3 um
d:Ge/MyCell/Mitochondria/c=0.9 um
s:Ge/MyCell/Mitochondria/Material="G4_WATER"
s:Ge/MyCell/Mitochondria/Color="green"
s:Ge/MyCell/Mitochondria/DrawingStyle="solid"

Ph/Default/Modules = 1 "g4em-livermore"

s:So/Disk/Type = "Beam" 
s:So/Disk/Component =  "BeamPosition" 
s:So/Disk/BeamParticle = "proton" #gamma
d:So/Disk/BeamEnergy = 2 MeV 
u:So/Disk/BeamEnergySpread = 0
s:So/Disk/BeamShape = "Rectangle"
s:So/Disk/BeamPositionDistribution = "Flat"
s:So/Disk/BeamAngularDistribution = "Gaussian"
d:So/Disk/BeamAngularCutoffX = 10 deg
d:So/Disk/BeamAngularCutoffY = 10 deg
s:So/Disk/BeamPositionCutoffShape = "Rectangle"
d:So/Disk/BeamPositionCutoffX = 1 um
d:So/Disk/BeamPositionCutoffY = 1 um
d:So/Disk/BeamAngularSpreadX = 0.01 deg
d:So/Disk/BeamAngularSpreadY = 0.01 deg
i:So/Disk/NumberOfHistoriesInRun=100

#Score in the Cell
s:Sc/CellScorer/Quantity = "DoseToMedium"
s:Sc/CellScorer/Component = "MyCell"
b:Sc/CellScorer/OutputToConsole = "True"
b:Sc/CellScorer/PropagateToChildren = "true"
s:Sc/CellScorer/IfOutputFileAlreadyExists = "overwrite"

#Score energy deposited in Cell components
s:Sc/OrganelleScorer/Quantity = "TsNtupleForCell"
s:Sc/OrganelleScorer/Component = "MyCell"
s:Sc/OrganelleScorer/IfOutputFileAlreadyExists = "Overwrite"  
s:Sc/OrganelleScorer/OutputType = "ASCII" 
s:Sc/OrganelleScorer/OutputFile = "EdepToOrganelles"
b:Sc/OrganelleScorer/PropagateToChildren = "true"

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1000
i:Gr/ViewA/WindowSizeY = 650
d:Gr/ViewA/PerspectiveAngle = 0 deg
d:Gr/ViewA/Theta = 0 deg
d:Gr/ViewA/Phi = 0 deg


Ts/PauseBeforeQuit = "True"


