# TOPAS-nBio example - hexagonal cell
# An irregular cell with organlles.
#
# Since mitochondria are arranged randomly, this check should be switched off,  
# overlap checking is still done and when an overlap is detected the overlapping components are rearranged. 
b:Ge/QuitIfOverlapDetected="false"

# Note: Having a very large number of mitochondria will slow down the code. 
# Ensure the volume is big enough to accommodate all mitochondria defined, otherwise the code may get stuck in a loop. 

d:Ge/World/HLX=50. um
d:Ge/World/HLY=50. um
d:Ge/World/HLZ=50. um
b:Ge/World/invisible="true"

s:Ge/MyCell/Type="TsHexagonCell"
s:Ge/MyCell/Color="white"
s:Ge/MyCell/Parent="World"
s:Ge/MyCell/Material="G4_WATER"

#Nucleus
d:Ge/MyCell/CellRadius=10 um 
d:Ge/MyCell/Nucleus/NucleusRadius=5. um
s:Ge/MyCell/Nucleus/Material="G4_WATER"
s:Ge/MyCell/Nucleus/Color="red"
b:Ge/MyCell/Nucleus/Invisible="false"

#Mitochondria
i:Ge/MyCell/Mitochondria/NumberOfMitochondria=20
d:Ge/MyCell/Mitochondria/a=0.5 um
d:Ge/MyCell/Mitochondria/b=0.3 um
d:Ge/MyCell/Mitochondria/c=0.9 um
s:Ge/MyCell/Mitochondria/Material="G4_WATER"
s:Ge/MyCell/Mitochondria/Color="green"

Ph/Default/Modules = 1 "g4em-dna"

# Set a source
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 5 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "None"
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 2

#Score dose to the Cell
s:Sc/CellScorer/Quantity = "DoseToMedium"
s:Sc/CellScorer/Component = "MyCell"
b:Sc/CellScorer/OutputToConsole = "True"
b:Sc/CellScorer/PropagateToChildren = "true"
s:Sc/CellScorer/IfOutputFileAlreadyExists = "overwrite"

#Score energy deposited in Cell components
s:Sc/OrganelleScorer/Quantity = "TsNtupleForCell"
s:Sc/OrganelleScorer/Component = "MyCell"
s:Sc/OrganelleScorer/IfOutputFileAlreadyExists = "Overwrite"  
s:Sc/OrganelleScorer/OutputType = "ASCII" 
s:Sc/OrganelleScorer/OutputFile = "EdepToOrganelles"
b:Sc/OrganelleScorer/PropagateToChildren = "true"

s:Gr/ViewA/Type = "OpenGL"
i:Gr/ViewA/WindowSizeX = 1000
i:Gr/ViewA/WindowSizeY = 800
d:Gr/ViewA/Theta = 55 deg
d:Gr/ViewA/Phi = 20 deg

Ts/PauseBeforeQuit = "True"


