# TOPAS-nBio example : Linear DNA model
# Linear DNA segment
#
# Single and double strand breaks are scored.

b:Ge/QuitIfOverlapDetected="true"
Ts/ShowHistoryCountAtInterval = 100

d:Ge/World/HLX=1 um
d:Ge/World/HLY=1 um
d:Ge/World/HLZ=1 um
b:Ge/World/Invisible = "True"
s:Ge/World/Material="G4_WATER"

s:Ge/MyDNA/Type="tslineardna"
s:Ge/MyDNA/Parent="world"
s:Ge/MyDNA/Material="G4_WATER"
i:Ge/MyDNA/NumberOfBasePairs=1000


# Material for volumes in strand 1
s:Ma/G4_WATER_MODIFIED_1/CloneFromMaterial = "G4_WATER"
d:Ma/G4_WATER_MODIFIED_1/CloneWithDensity  = 1.0 g/cm3

# Auxiliar material for volumes in strand 2
s:Ma/G4_WATER_MODIFIED_2/CloneFromMaterial = "G4_WATER_MODIFIED_1"
d:Ma/G4_WATER_MODIFIED_2/CloneWithDensity  = 1.0 g/cm3

#Modified water material is needed for scoring strand breaks:
s:Ge/MyDNA/BasePair/Material="G4_WATER"
s:Ge/MyDNA/Sugar1/Material="G4_WATER_MODIFIED_1"
s:Ge/MyDNA/Sugar2/Material="G4_WATER_MODIFIED_2"

#Visualization 
s:Ge/MyDNA/BasePair/DrawingStyle="solid"
s:Ge/MyDNA/Sugar1/Color="red"
s:Ge/MyDNA/Sugar1/DrawingStyle="solid"
s:Ge/MyDNA/Sugar2/Color="blue"
s:Ge/MyDNA/Sugar2/DrawingStyle="solid"

#Set Physics:
sv:Ph/Default/Modules = 1 "g4em-dna" 

s:So/Disk/Type = "Beam" 
s:So/Disk/Component =  "BeamPosition" 
s:So/Disk/BeamParticle = "proton" 
d:So/Disk/BeamEnergy = 2 MeV 
u:So/Disk/BeamEnergySpread = 0
s:So/Disk/BeamShape = "Rectangle"
s:So/Disk/BeamPositionDistribution = "Flat"
s:So/Disk/BeamAngularDistribution = "Gaussian"
d:So/Disk/BeamAngularCutoffX = 10 deg
d:So/Disk/BeamAngularCutoffY = 10 deg
s:So/Disk/BeamPositionCutoffShape = "Rectangle"
d:So/Disk/BeamPositionCutoffX = 2 nm
d:So/Disk/BeamPositionCutoffY = 2 nm
d:So/Disk/BeamAngularSpreadX = 0.01 deg
d:So/Disk/BeamAngularSpreadY = 0.01 deg
i:So/Disk/NumberOfHistoriesInRun=1

#Score SSB and DSB in DNA

s:Sc/StrandBreak/Quantity                             = "SimpleSSBandDSB"
s:Sc/StrandBreak/Component                            = "MyDNA"
s:Sc/StrandBreak/OutputType                           = "ASCII"
s:Sc/StrandBreak/OutputFile                           = "StrandBreaks"
b:Sc/StrandBreak/OutputToConsole                      = "True"
s:Sc/StrandBreak/IfOutputFileAlreadyExists            = "Overwrite"
# Parameters to define a strand break and a double strand break
i:Sc/StrandBreak/BasePairDistanceForDefiningDSB       = 10
d:Sc/StrandBreak/EnergyThresholdForHavingSSB          = 0 eV #17.5 eV
# The sensitive detector is inherit to the children geometries (sugar1, sugar2)
b:Sc/StrandBreak/PropagateToChildren = "True"
# For this example, the sugars and base are replica volumes 
i:Sc/StrandBreak/BasePairPositionAtGeometricHierarchy = 0   # the sugars and base are in position 0.
# To let the scorer differentiate between strand 1 (sugar1) and strand 2 (sugar2)
s:Sc/StrandBreak/Strand1MaterialName                  = "G4_WATER_MODIFIED_1"
s:Sc/StrandBreak/Strand2MaterialName                  = "G4_WATER_MODIFIED_2"
# Only hits in sugar's volume
sv:Sc/StrandBreak/OnlyIncludeIfInMaterial = 2 "G4_WATER_MODIFIED_1" "G4_WATER_MODIFIED_2"



s:Gr/ViewA/Type = "OpenGL"
d:Gr/ViewA/Theta = 45 deg
d:Gr/ViewA/Phi   = 45 deg
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 700

Ts/PauseBeforeQuit = "False"
b:Ts/ShowCPUTime = "True"
