
## ---------------- Scoring ----------------  ##
s:SensitiveVolumeName = "Fiber"   #Set volume name to track in

s:Sc/MyScorer/Quantity = "NtupleForBasePair"
b:Sc/MyScorer/Active = "True"
s:Sc/MyScorer/Component = SensitiveVolumeName
s:Sc/MyScorer/OutputFile = "OutputFile"
s:Sc/MyScorer/OutputType = "ASCII"
s:Sc/MyScorer/IfOutputFileAlreadyExists = "Overwrite"
#b:Sc/MyScorer/OutputAfterRun = "true"  # Code forces output so it can be read in for clustering

b:WriteHeader = "true"              #False = turn off STD format header for distributed run (Default = true)

//The name of the DNA elements
s:Base_strand1_name="base1"
s:Base_strand2_name="base2"
s:Back_strand1_name="back1"
s:Back_strand2_name="back2"


b:EventByEvent = "true"            #Evt-by-evt clustering or on exposure (Default = exposure)

# Target size
d:HLX = 2.5 um
d:HLY = 2.5 um
d:HLZ = 2.5 um
i:Shape = 0                         #0=ellipse, 1=box

s:DamageMode = "Range"              #"Range"=energy range, "Threshold"=energy threshold, "Ionisation"=ionisations
d:MinEneRange = 5.0 eV              #Min energy for damage range (Default = 5 eV)
d:MaxEneRange = 37.5 eV             #Max energy for damage range (Default = 37.5 eV)
d:MinEneThresh = 17.5 eV            #Min energy for damage threshold (Default = 17.5 eV)

#Beam details (also used by "Parameters_Beam.txt")
s:BeamParticle = "proton"
u:BeamEnergySpread = 0.0
s:BeamEnergyDistribution = "Mono"
d:BeamEnergy = 1.0 MeV

b:StoreDamagesInMemory = "false"  #Set to true to store damages ready to pass to further models

b:AddChromosomeDomains = "false"   #Build and assign chromosome domains to damages


#s:Sc/DoseScorer/Component = SensitiveVolumeName
#s:Sc/DoseScorer/Quantity = "DoseToMedium"
#b:Sc/DoseScorer/OutputToConsole = "true"
#b:Sc/DoseScorer/OutputAfterRun = "true"
#s:Sc/DoseScorer/IfOutputFileAlreadyExists = "Increment"
#s:Sc/DoseScorer/OutputFile = "Dose"
#s:Sc/DoseScorer/OutputType = "CSV"
