i:Ts/NumberOfThreads = 4
Tf/NumberOfSequentialTimes = 10000
b:Ts/PauseBeforeQuit = "t"
b:Ts/DumpParameters = "f"
i:Ts/Seed = 1234

includeFile = Parameters_Geometry.txt
#includeFile = Parameters_Physics.txt
#includeFile = Parameters_Beam.txt
includeFile = Parameters_Scorer.txt
#includeFile = Parameters_Vis.txt


## ---------------- Geometry ----------------  ##
Ge/World/Type = "TsBox"
Ge/World/HLX = 5. um
Ge/World/HLY = 5. um
Ge/World/HLZ = 5. um
s:Ge/World/Material = "G4_WATER"
b:Ge/World/Invisible = "false"
b:Ge/CheckForOverlaps = "True"



## ---------------- Physics ----------------  ##
sv:Ph/Default/Modules = 1 "g4em-dna"
d:Ph/Default/CutForAllParticles = 1.0 nm



## ---------------- Beam ----------------  ##
#position
s:Ge/BeamPosition/Parent="World"
#s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransX= 0.0 nm
d:Ge/BeamPosition/TransY= 0.0 nm
d:Ge/BeamPosition/TransZ= -6.0 um
d:Ge/BeamPosition/RotX=0. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg

#details
d:BeamEnergy=2.5 MeV
s:So/Demo/Type = "Beam"
s:So/Demo/Component = "BeamPosition"
s:So/Demo/BeamParticle = BeamParticle
d:So/Demo/BeamEnergy = BeamEnergy MeV
u:So/Demo/BeamEnergySpread = BeamEnergySpread

s:So/Demo/BeamPositionDistribution = "Flat"

s:So/Demo/BeamAngularDistribution = "None"
d:So/Demo/BeamAngularSpreadX=0. deg
d:So/Demo/BeamAngularSpreadY=0. deg
i:So/Demo/NumberOfHistoriesInRun = 36

s:So/Demo/BeamPositionCutoffShape = "Ellipse"
d:So/Demo/BeamPositionCutoffX = 5.01321 um
d:So/Demo/BeamPositionCutoffY = 5.01321 um



## ---------------- Visualisation ----------------  ##
#s:Gr/MyOGL/Type        = "OpenGL"
#i:Gr/MyOGL/WindowSizeX = 1200
#i:Gr/MyOGL/WindowSizeY = 1200
#i:Gr/MyOGL/WindowPosX  = 0
#i:Gr/MyOGL/WindowPosY  = 0
##d:Gr/MyOGL/Theta       = 360. deg
##d:Gr/MyOGL/Phi         = 0. deg
#d:Gr/MyOGL/Theta       = 90. deg
#d:Gr/MyOGL/Phi         = 0. deg
##u:Gr/MyOGL/Zoom        = 2
